
objref smAllComps

{ load_file("SynManagerLoads.hoc") }


proc createSynComps() {
    smAllComps = new List()
    smAllComps.append(new SynPPComp("Source PP", 0))
    smAllComps.append(new SynNCComp())
    smAllComps.append(new SynPPComp("Target PP", 1))
    smAllComps.append(new SynPPComp("Single PP", 2))
    enumSynCompIdxs.srcPp = 0
    enumSynCompIdxs.netCon = 1
    enumSynCompIdxs.trgPp = 2
    enumSynCompIdxs.sngPp = 3
}

proc createSynCompsAndShowSynManagerBaseWidget() { localobj nil

    if (isAstrocyteOrNeuron) {
        codeContractViolation()
    }
    
    if (smAllComps == nil) {
        createSynComps()
    }
    
    spineNeckDiamCache.cacheAllDiams()
    
    dismissIfNotNil(msmBaseWidget)
    msmBaseWidget = new MechOrSynManagerBaseWidget(0)
    msmBaseWidget.show()
    msmBaseWidget.showSynManagerHandler()
    msmBaseWidget.showAltRunControlHandler()
}
